PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show mouse = True
  Units = height
  Window size (pixels) = [1470, 956]
  color = 1.0000, 1.0000, 1.0000
  expName = IAT_block_loop1after
  keyboardBackend = PsychToolbox
  runMode = 1
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Routines
  Routine preBlockInstr
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    KeyboardComponent preBlockInstrKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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    ImageComponent intropic
      image [set every repeat] = $introPic
      size = (1, 0.75)
      startVal [time (s)] = 0.0
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  Routine trail
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    ImageComponent stim
      image [set every repeat] = $stims
      size [set every repeat] = w,h
      startVal [time (s)] = 1
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    KeyboardComponent key_resp
      allowedKeys = 'e','i'
      correctAns = $correct_key
      forceEndRoutine = True
      startVal [time (s)] = 1
      storeCorrect = True
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    PolygonComponent polygon
      fillColor = 1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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Flow
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = IAT_block_loop1.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'block_loop': 'IAT_block1.xlsx', 'reps': 1, 'leftLabelT': '胖图-按E键', 'rightLabelT': '瘦图-按I键', 'instrText': '接下来将进行第一部分测试。\n请将你左手和右手的食指部分分别放在键盘的E键和I键上。\n一会屏幕中央会先暂时出现一个十字，请注视它。\n十字消失后会出现呈现一个词语\n请在保证正确率的情况下尽快对其进行分类。\n规则为：\n胖图 - 按E键\n瘦图 - 按I键\n如果你已明白规则，请按空格开始测试。\n如果有任何疑问，请联系实验员。', 'introPic': 'pic/intro1.png', 'leftLabel': 'pic/anjianl1.png', 'rightLabel': 'pic/anjianr1.png'},
      {'block_loop': 'IAT_block2.xlsx', 'reps': 1, 'leftLabelT': '期待词-按E键', 'rightLabelT': '中性词-按I键', 'instrText': '接下来将进行第二部分测试。\n请将你左手和右手的食指部分分别放在键盘的E键和I键上。\n该部分流程与之前相同，只是规则发生了轻微的变化\n规则为：\n期待词 - 按E键\n中性词 - 按I键\n请在保证正确率的情况下尽快对其进行分类。\n如果你已明白规则，请按空格开始测试。\n如果有任何疑问，请联系实验员。', 'introPic': 'pic/intro2.png', 'leftLabel': 'pic/anjianl2.png', 'rightLabel': 'pic/anjianr2.png'},
      {'block_loop': 'IAT_block34.xlsx', 'reps': 1, 'leftLabelT': '胖图或期待词-按E键', 'rightLabelT': '瘦图或者中性词-按I键', 'instrText': '接下来将进行第三部分测试。\n请将你左手和右手的食指部分分别放在键盘的E键和I键上。\n该部分流程与之前相同，只是规则发生了轻微的变化\n规则为：\n胖图 或 期待词 - 按E键\n瘦图 或 中性词 - 按I键\n请在保证正确率的情况下尽快对其进行分类。\n如果你已明白规则，请按空格开始测试。\n如果有任何疑问，请联系实验员。', 'introPic': 'pic/intro3.png', 'leftLabel': 'pic/anjianl3.png', 'rightLabel': 'pic/anjianr3.png'},
      {'block_loop': 'IAT_block34.xlsx', 'reps': 1, 'leftLabelT': '胖图或期待词-按E键', 'rightLabelT': '瘦图或者中性词-按I键', 'instrText': '接下来将进行第四部分测试。\n请将你左手和右手的食指部分分别放在键盘的E键和I键上。\n该部分流程与刚才的完全相同，规则同样为：\n胖图 或 期待词 - 按E键\n瘦图 或 中性词 - 按I键\n请在保证正确率的情况下尽快对其进行分类。\n如果你已明白规则，请按空格开始测试。\n如果有任何疑问，请联系实验员。', 'introPic': 'pic/intro4.png', 'leftLabel': 'pic/anjianl4.png', 'rightLabel': 'pic/anjianr4.png'}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
    Routine preBlockInstr
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $block_loop
      loopType = random
      nReps = reps
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      conditions:
        [{'stims': 'pic/fat1.png', 'correct_key': 'e', 'w': 0.796, 'h': 0.528},
        {'stims': 'pic/fat2.png', 'correct_key': 'e', 'w': 0.796, 'h': 0.528},
        {'stims': 'pic/fat3.png', 'correct_key': 'e', 'w': 0.796, 'h': 0.528},
        {'stims': 'pic/fat4.png', 'correct_key': 'e', 'w': 0.796, 'h': 0.528},
        {'stims': 'pic/thin1.png', 'correct_key': 'i', 'w': 0.796, 'h': 0.488},
        {'stims': 'pic/thin2.png', 'correct_key': 'i', 'w': 0.796, 'h': 0.622},
        {'stims': 'pic/thin3.png', 'correct_key': 'i', 'w': 0.796, 'h': 0.622},
        {'stims': 'pic/thin4.png', 'correct_key': 'i', 'w': 0.796, 'h': 0.622}]
      Routine trail
    LoopTerminator trials
  LoopTerminator trials_2
